CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"ChannelNumber": "none", "Condition": "text", "FOV": "none", "Field": "text", "FileLocation": "none", "Frame": "none", "ID": "text", "Marker": "text", "Plate": "none", "Series": "none", "Site": "none", "Well": "none", "condition": "none", "marker": "none"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Condition>[A-Z]{3})_(?P<ID>[0-9]{4})_(?P<Field>[A-Z,0-9]{4})_(?P<Marker>[A-Z,a-z,0-9,\W]{1,15})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:26
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "a4b7")
    Name to assign these images:a4b7
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CCR5")
    Name to assign these images:CCR5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CCR6")
    Name to assign these images:CCR6
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "CD3.tif")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "CD4.tif")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD8")
    Name to assign these images:CD8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD31")
    Name to assign these images:CD31
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD45")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD49a")
    Name to assign these images:CD49a
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD66b")
    Name to assign these images:CD66b
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD68")
    Name to assign these images:CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD69")
    Name to assign these images:CD69
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD103")
    Name to assign these images:CD103
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CD161")
    Name to assign these images:CD161
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CXCR3")
    Name to assign these images:CXCR3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "E-Cadherin")
    Name to assign these images:Ecadherin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Eomes")
    Name to assign these images:Eomes
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Granzyme A")
    Name to assign these images:GRZa
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Granzyme B")
    Name to assign these images:GRZb
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "HLA-DR")
    Name to assign these images:HLADR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Langerin")
    Name to assign these images:Langerin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "RORgt")
    Name to assign these images:RORgt
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sytox")
    Name to assign these images:Sytox
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "T-bet")
    Name to assign these images:Tbet
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TCRVa")
    Name to assign these images:TCRVa72
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:CCR5
    Name the output image:R_CCR5
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:DAPI
    Additional image count:21
    Select the additional image?:CCR6
    Name the output image:R_CCR6
    Select the additional image?:CD103
    Name the output image:R_CD103
    Select the additional image?:CD161
    Name the output image:R_CD161
    Select the additional image?:CD3
    Name the output image:R_CD3
    Select the additional image?:CD31
    Name the output image:R_CD31
    Select the additional image?:CD4
    Name the output image:R_CD4
    Select the additional image?:CD45
    Name the output image:R_CD45
    Select the additional image?:CD49a
    Name the output image:R_CD49a
    Select the additional image?:CD66b
    Name the output image:R_CD66b
    Select the additional image?:CD68
    Name the output image:R_CD68
    Select the additional image?:CD69
    Name the output image:R_CD69
    Select the additional image?:Ecadherin
    Name the output image:R_ECadherin
    Select the additional image?:Eomes
    Name the output image:R_Eomes
    Select the additional image?:GRZa
    Name the output image:R_GRZa
    Select the additional image?:GRZb
    Name the output image:R_GRZb
    Select the additional image?:HLADR
    Name the output image:R_HLADR
    Select the additional image?:Langerin
    Name the output image:R_Langerin
    Select the additional image?:RORgt
    Name the output image:R_RORgt
    Select the additional image?:TCRVa72
    Name the output image:R_TCRVa72
    Select the additional image?:Tbet
    Name the output image:R_Tbet
    Select the additional image?:CD8
    Name the output image:R_CD8

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DAPI
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:9.5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.05
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:nuclei
    Name the objects to be identified:cell
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:2
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:R_CD45
    Select objects to measure:cell

FilterObjects:[module_num:9|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
    Select the objects to filter:cell
    Name the output objects:leukocytes
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_R_CD45
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:R_CD103, R_CD161, R_CD3, R_CD31, R_CD4, R_CD45, R_CD49a, R_CD66b, R_CD68, R_CD69, R_CD8, R_ECadherin, R_Eomes, R_GRZa, R_GRZb, R_HLADR, R_Langerin, R_TCRVa72
    Select objects to measure:leukocytes

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_leukocytes,leukocytes|Intensity_MeanIntensity_R_GRZa,leukocytes|Intensity_MeanIntensity_R_CD161,leukocytes|Intensity_MeanIntensity_R_CD69,leukocytes|Intensity_MeanIntensity_R_CD103,leukocytes|Intensity_MeanIntensity_R_CD31,leukocytes|Intensity_MeanIntensity_R_CD4,leukocytes|Intensity_MeanIntensity_R_CD49a,leukocytes|Intensity_MeanIntensity_R_Eomes,leukocytes|Intensity_MeanIntensity_R_CD45,leukocytes|Intensity_MeanIntensity_R_GRZb,leukocytes|Intensity_MeanIntensity_R_HLADR,leukocytes|Intensity_MeanIntensity_R_ECadherin,leukocytes|Intensity_MeanIntensity_R_CD3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Intensity
    Overwrite existing files without warning?:Yes
    Data to export:leukocytes
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
